# Remember to UserSetDirectory before starting
ScriptName FISE

###### USER INPUTS ####
TotalRecordTime := 150 # Total Record Time for entire FISE tilt-series
ExpTime := 0.9 # Exposure time per tilt
MaxAngle := 60 # Max tilt angle to collect (positive direction)
TiltIncr := 3 # Tilt increment (degrees)
Settling := 0.75 # Delay time to allow the stage to settle before unblanking beam
FrameThreshold := 0.005 # Frames with a mean value below this threshold will not be saved
useCDS := 1 # Set to 1 to acquire data in CDS mode.
useNewEucentricHeight := 1 # set to 1 to use the separate eucentric height method (or 0 to use SerialEM’s)
##################

SetUserSetting UseK3CDS 0
If $useNewEucentricHeight == 0
   Eucentricity 6
Endif
If $useNewEucentricHeight == 1
   Call GetEucentricHeight
Endif
AutocenterBeam
Autofocus

Echo Checking if calibration is needed...
ReportNavItem 
CurrentItem = $reportedValue1
NavIndexItemDrawnOn $CurrentItem
NextMap = $reportedValue1

IsVariableDefined CurrentMap
If $reportedValue1 == 0
   CurrentMap := 0
Else
   Echo Current map is $CurrentMap
Endif

If $NextMap != $CurrentMap
   CurrentMap := $NextMap
   Echo Current map is updated to $CurrentMap
   Echo RUNNING CALIBRATION
   Call GetCalibrations
Else
   Echo Item $CurrentItem is in map $CurrentMap. Proceeding with the same calibration.
   If $useCDS ==1
   SetUserSetting UseK3CDS 1
   UpdateHWDarkRef 0
   Endif
Endif     

IniDelay = 0.5 # Initial Delay Before starting FISE acquisition (seconds)
SetExposure 3 $TotalRecordTime
Echo Total Record Time is set to $TotalRecordTime s
Echo Working on Nav# $CurrentItem 
FrameThresholdNextShot $FrameThreshold
FrameSeriesFromVar ArrayTilt 31 $IniDelay
ResetClock 
R
ReportLastFrameFile 
WriteFrameSeriesAngles $reportedValue1.angles
ReportClock 
TiltTo 0
Echo Done!
